[
    {
        "object.className": "ProtMonitorSystem",
        "object.id": "1515",
        "object.label": "scipion - system_monitor (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "5448"
        ],
        "samplingInterval": 5,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "monitorTime": 300.0,
        "doMail": false,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "doGpu": false,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 2,
        "doDiskIO": true
    },
    {
        "object.className": "ProtMonitorSystem",
        "object.id": "2129",
        "object.label": "scipion - system_monitor (copy 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "inputProtocols": [
            "5448"
        ],
        "samplingInterval": 5,
        "cpuAlert": 101.0,
        "memAlert": 101.0,
        "swapAlert": 101.0,
        "monitorTime": 300.0,
        "doMail": false,
        "emailFrom": "from@from.fakeadress.com",
        "emailTo": "to@to.fakeadress.com",
        "smtp": "smtp.fakeadress.com",
        "doGpu": true,
        "gpusToUse": "0",
        "doNetwork": false,
        "netInterfaces": 2,
        "doDiskIO": false
    },
    {
        "object.className": "ProtImportMovies",
        "object.id": "5448",
        "object.label": "scipion - import movies (copy 7)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "importFrom": 0,
        "filesPath": "/home/roberto/Scipion/CNB-cryoEM-benchmarking/Data/",
        "filesPattern": "movie_*_?.mrcs",
        "copyFiles": false,
        "haveDataBeenPhaseFlipped": false,
        "acquisitionWizard": null,
        "voltage": 200.0,
        "sphericalAberration": 2.7,
        "amplitudeContrast": 0.1,
        "magnification": 45000,
        "samplingRateMode": 0,
        "samplingRate": 0.46,
        "scannedPixelSize": 7.0,
        "doseInitial": 0.0,
        "dosePerFrame": 0.75,
        "gainFile": "/home/roberto/Scipion/CNB-cryoEM-benchmarking/Data/norm_5760.mrc",
        "darkFile": null,
        "dataStreaming": true,
        "timeout": 43200,
        "fileTimeout": 10,
        "blacklistDateFrom": null,
        "blacklistDateTo": null,
        "useRegexps": true,
        "blacklistFile": null,
        "inputIndividualFrames": false,
        "numberOfIndividualFrames": null,
        "stackFrames": false,
        "writeMoviesInProject": false,
        "movieSuffix": "_frames.mrcs",
        "deleteFrames": false
    },
    {
        "object.className": "ProtMotionCorr",
        "object.id": "5510",
        "object.label": "motioncorr - movie alignment (copy 7)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "gpuList": "0",
        "doSaveAveMic": true,
        "useAlignToSum": true,
        "alignFrame0": 1,
        "alignFrameN": 0,
        "binFactor": 1.0,
        "cropOffsetX": 0,
        "cropOffsetY": 0,
        "cropDimX": 0,
        "cropDimY": 0,
        "doSaveMovie": false,
        "doComputePSD": true,
        "doComputeMicThumbnail": false,
        "extraProtocolParams": "",
        "doApplyDoseFilter": true,
        "patchX": 5,
        "patchY": 5,
        "patchOverlap": 0,
        "group": 10,
        "tol": 0.5,
        "doSaveUnweightedMic": true,
        "doMagCor": false,
        "useEst": true,
        "scaleMaj": 1.0,
        "scaleMin": 1.0,
        "angDist": 0.0,
        "gainRot": 0,
        "gainFlip": 0,
        "defectFile": null,
        "extraParams2": "",
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "inputMovies": "5448.outputMovies"
    },
    {
        "object.className": "ProtGctf",
        "object.id": "5572",
        "object.label": "Gctf (copy 7)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "ctfDownFactor": 4.0,
        "lowRes": 0.03,
        "highRes": 0.27,
        "minDefocus": 0.25,
        "maxDefocus": 9.0,
        "astigmatism": 100.0,
        "windowSize": 512,
        "plotResRing": true,
        "gpuList": "0",
        "doEPA": false,
        "EPAsmp": 4,
        "doBasicRotave": false,
        "overlap": 0.5,
        "convsize": 85,
        "bfactor": 150,
        "doHighRes": true,
        "HighResL": 15.0,
        "HighResH": 4.0,
        "HighResBf": 50,
        "doValidate": false,
        "doPhShEst": false,
        "phaseShiftL": 0.0,
        "phaseShiftH": 180.0,
        "phaseShiftS": 10.0,
        "phaseShiftT": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "inputMicrographs": "5510.outputMicrographs"
    },
    {
        "object.className": "ProtCTFFind",
        "object.id": "5891",
        "object.label": "Ctffind (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "recalculate": false,
        "sqliteFile": null,
        "AutoDownsampling": false,
        "ctfDownFactor": 4.0,
        "useCtffind4": true,
        "astigmatism": 100.0,
        "findPhaseShift": false,
        "minPhaseShift": 0.0,
        "maxPhaseShift": 3.15,
        "stepPhaseShift": 0.2,
        "resamplePix": true,
        "slowSearch": true,
        "lowRes": 0.03,
        "highRes": 0.27,
        "minDefocus": 0.25,
        "maxDefocus": 4.0,
        "windowSize": 256,
        "hostName": "localhost",
        "numberOfThreads": 3,
        "numberOfMpi": 1,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "inputMicrographs": "5510.outputMicrographs"
    },
    {
        "object.className": "XmippProtCTFConsensus",
        "object.id": "5950",
        "object.label": "xmipp3 - ctf consensus",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "useDefocus": false,
        "minDefocus": 4000.0,
        "maxDefocus": 40000.0,
        "useAstigmatism": false,
        "astigmatism": 1000.0,
        "useResolution": false,
        "resolution": 17.0,
        "useCritXmipp": false,
        "critFirstZero": 5.0,
        "minCritFirstZeroRatio": 0.9,
        "maxCritFirstZeroRatio": 1.1,
        "critCorr": 0.05,
        "critCtfMargin": 1.5,
        "critIceness": 1.0,
        "minCritNonAstigmaticValidity": 0.3,
        "maxCritNonAstigmaticValidity": 9.0,
        "calculateConsensus": true,
        "minConsResol": 5.0,
        "hostName": "localhost",
        "inputCTF2": "5572.outputCTF",
        "inputCTF": "5891.outputCTF"
    },
    {
        "object.className": "XmippProtParticlePicking",
        "object.id": "6025",
        "object.label": "xmipp3 - supervised (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "saveDiscarded": false,
        "inputMicrographs": "5510.outputMicrographsDoseWeighted"
    },
    {
        "object.className": "XmippParticlePickingAutomatic",
        "object.id": "6131",
        "object.label": "xmipp3 - auto-picking (step 2)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "micsToPick": 0,
        "streamingWarning": null,
        "streamingSleepOnWait": 0,
        "streamingBatchSize": 1,
        "hostName": "localhost",
        "numberOfThreads": 1,
        "numberOfMpi": 1,
        "xmippParticlePicking": "6025."
    },
    {
        "object.className": "ProtRelionExtractParticles",
        "object.id": "6175",
        "object.label": "relion - extract particles (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "downsampleType": 0,
        "boxSize": 250,
        "doRescale": false,
        "rescaledSize": null,
        "doInvert": true,
        "doNormalize": true,
        "backDiameter": -1,
        "stddevWhiteDust": -1.0,
        "stddevBlackDust": -1.0,
        "streamingWarning": null,
        "streamingSleepOnWait": 60,
        "streamingBatchSize": 0,
        "hostName": "localhost",
        "numberOfMpi": 4,
        "ctfRelations": "5891.outputCTF",
        "inputCoordinates": "6131.outputCoordinates"
    },
    {
        "object.className": "ProtMonitor2dStreamer",
        "object.id": "8561",
        "object.label": "scipion - 2d streamer (copy)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "batchSize": 2000,
        "startingNumber": 0,
        "samplingInterval": 10,
        "inputParticles": "6175.outputParticles",
        "input2dProtocol": "10540."
    },
    {
        "object.className": "ProtRelionClassify2D",
        "object.id": "10540",
        "object.label": "relion 2d - TEMPLATE (copy 25)",
        "object.comment": "",
        "_useQueue": false,
        "_queueParams": null,
        "runName": null,
        "runMode": 0,
        "isClassify": true,
        "is2D": true,
        "doContinue": false,
        "copyAlignment": false,
        "alignmentAsPriors": false,
        "fillRandomSubset": false,
        "maskDiameterA": -1,
        "maskZero": 0,
        "continueIter": "last",
        "continueMsg": "True",
        "doCTF": true,
        "hasReferenceCTFCorrected": false,
        "haveDataBeenPhaseFlipped": null,
        "ignoreCTFUntilFirstPeak": false,
        "doCtfManualGroups": false,
        "defocusRange": 1000.0,
        "numParticles": 10.0,
        "numberOfClasses": 16,
        "regularisationParamT": 2,
        "numberOfIterations": 25,
        "useFastSubsets": false,
        "limitResolEStep": -1.0,
        "doImageAlignment": true,
        "inplaneAngularSamplingDeg": 5.0,
        "offsetSearchRangePix": 5.0,
        "offsetSearchStepPix": 1.0,
        "useParallelDisk": true,
        "pooledParticles": 3,
        "allParticlesRam": false,
        "scratchDir": null,
        "combineItersDisc": false,
        "doGpu": true,
        "gpusToUse": "",
        "oversampling": 1,
        "extraParams": "--maxsig 10",
        "hostName": "localhost",
        "numberOfThreads": 2,
        "numberOfMpi": 3
    }
]